# Generated by OpenSesame 2.9.2 (Hesitant Heisenberg)
# Thu Feb  5 16:05:24 2015 (posix)
# <http://www.cogsci.nl/opensesame>

set background "black"
set canvas_backend "xpyriment"
set compensation "0"
set coordinates "relative"
set description "Default description"
set foreground "white"
set height "768"
set keyboard_backend "legacy"
set mouse_backend "xpyriment"
set sampler_backend "legacy"
set start "experiment"
set subject_nr "0"
set subject_parity "even"
set synth_backend "legacy"
set title "New experiment"
set width "1024"

define keyboard_response _keyboard_response
	set allowed_responses "e;o"
	set correct_response "[resp]"
	set flush "yes"
	set timeout "2000"

define sketchpad _sketchpad
	set duration "keypress"
	set reset_variables "no"
	draw textline 0 0 "[response_time]" center=1 color="white" font_family="mono" font_size=18 font_bold="no" font_italic="no" html="yes" z_index=0 show_if="always"

define advanced_delay attente
	set duration "0"
	set jitter "0"
	set jitter_mode "Uniform"

define sketchpad blank_screen
	set duration "500"
	set reset_variables "no"

define sequence experiment
	run getting_started "always"
	run loop "always"

define notepad getting_started
	set description "Some pointers to help you get started!"
	__note__
	Hi,
	
	Welcome to OpenSesame 2.9.2 "Hesitant Heisenberg"!
	
	If you are new to OpenSesame, you may wish to follow one of the tutorials,
	which can be found online. There are also many example experiments, which will
	help you to get started with creating your own. These can be found in the
	"examples" folder provided with OpenSesame or, again, online.
	
	For more information, please refer to OpenSesame documentation area:
	
	- <http://osdoc.cogsci.nl/>
	
	And feel free to ask for help on the forum:
	
	- <http://forum.cogsci.nl/>
	
	Have fun with OpenSesame!
	
	--
	Sebastiaan
	__end__

define keyboard_response keyboard_response
	set allowed_responses "e;i"
	set flush "yes"
	set timeout "infinite"

define logger logger

define loop loop
	set break_if "never"
	set column_order "length;freq;item;resp"
	set cycles "360"
	set item "sequence"
	set order "random"
	set repeat "1"
	setcycle 0 item "seau"
	setcycle 0 length "l4"
	setcycle 0 freq "lf"
	setcycle 0 resp "o"
	setcycle 1 item "amen"
	setcycle 1 length "l4"
	setcycle 1 freq "lf"
	setcycle 1 resp "o"
	setcycle 2 item "ring"
	setcycle 2 length "l4"
	setcycle 2 freq "lf"
	setcycle 2 resp "o"
	setcycle 3 item "vase"
	setcycle 3 length "l4"
	setcycle 3 freq "lf"
	setcycle 3 resp "o"
	setcycle 4 item "mont"
	setcycle 4 length "l4"
	setcycle 4 freq "lf"
	setcycle 4 resp "o"
	setcycle 5 item "sons"
	setcycle 5 length "l4"
	setcycle 5 freq "lf"
	setcycle 5 resp "o"
	setcycle 6 item "cire"
	setcycle 6 length "l4"
	setcycle 6 freq "lf"
	setcycle 6 resp "o"
	setcycle 7 item "lacs"
	setcycle 7 length "l4"
	setcycle 7 freq "lf"
	setcycle 7 resp "o"
	setcycle 8 item "vues"
	setcycle 8 length "l4"
	setcycle 8 freq "lf"
	setcycle 8 resp "o"
	setcycle 9 item "boxe"
	setcycle 9 length "l4"
	setcycle 9 freq "lf"
	setcycle 9 resp "o"
	setcycle 10 item "clou"
	setcycle 10 length "l4"
	setcycle 10 freq "lf"
	setcycle 10 resp "o"
	setcycle 11 item "girl"
	setcycle 11 length "l4"
	setcycle 11 freq "lf"
	setcycle 11 resp "o"
	setcycle 12 item "char"
	setcycle 12 length "l4"
	setcycle 12 freq "lf"
	setcycle 12 resp "o"
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	setcycle 45 item "amis"
	setcycle 45 length "l4"
	setcycle 45 freq "hf"
	setcycle 45 resp "o"
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	setcycle 90 item "avenue"
	setcycle 90 length "l6"
	setcycle 90 freq "lf"
	setcycle 90 resp "o"
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	setcycle 135 item "partie"
	setcycle 135 length "l6"
	setcycle 135 freq "hf"
	setcycle 135 resp "o"
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	setcycle 180 item "pres"
	setcycle 180 length "4"
	setcycle 180 freq "pw"
	setcycle 180 resp "e"
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	setcycle 270 item "nonigr"
	setcycle 270 length "6"
	setcycle 270 freq "pw"
	setcycle 270 resp "e"
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	run sequence

define sequence sequence
	run stimuluspresentation "always"
	run _keyboard_response "always"
	run blank_screen "always"
	run logger "always"

define sketchpad sketchpad
	set duration "0"
	set reset_variables "no"
	draw textline 0 0 "bonjour" center=1 color="white" font_family="mono" font_size=18 font_bold="no" font_italic="no" html="yes" z_index=0 show_if="always"

define sketchpad stimuluspresentation
	set duration "0"
	set reset_variables "no"
	draw textline 0.0 0.0 "[item]" center=1 color="white" font_family="mono" font_size=24 font_bold="no" font_italic="no" html="yes" z_index=0 show_if="always"

define sketchpad welcome
	set description "Displays stimuli"
	set duration "keypress"
	set reset_variables "no"
	set start_response_interval "no"
	draw textline 0 0 "OpenSesame 2.9.2 <i>Hesitant Heisenberg</i>" center=1 color="white" font_family="serif" font_size=32 font_bold="no" font_italic="no" html="yes" z_index=0 show_if="always"

